PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Solo project exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine fixation
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    TextComponent fix_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        +
  Routine Stimulus
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    TextComponent target_letter
      letterHeight = 0.12
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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      text [set every repeat]:
        $target
    TextComponent flank_top
      letterHeight = 0.12
      pos [set every repeat] = (0.25, 0.10) if condition=='crowded' else (0.25, 0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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      text:
        "H"
    TextComponent flank_bottom
      letterHeight = 0.05
      pos [set every repeat] = (0.25, -0.10) if condition=='crowded' else (0.25, -0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = "H"
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    TextComponent flank_left
      letterHeight = 0.05
      pos [set every repeat] = (0.18, 0) if condition=='crowded' else (0.05, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = "H"
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    TextComponent flank_right
      letterHeight = 0.05
      pos [set every repeat] = (0.32, 0) if condition=='crowded' else (0.45, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = "H"
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  Routine response
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    TextComponent response_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which letter did you see? Press the key.
    KeyboardComponent key_resp
      correctAns = $target.lower()
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/DELL/Downloads/crowding_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'T', 'condition': 'crowded'},
      {'target': 'F', 'condition': 'crowded'},
      {'target': 'H', 'condition': 'crowded'},
      {'target': 'L', 'condition': 'crowded'},
      {'target': 'E', 'condition': 'crowded'},
      {'target': 'P', 'condition': 'crowded'},
      {'target': 'T', 'condition': 'uncrowded'},
      {'target': 'F', 'condition': 'uncrowded'},
      {'target': 'H', 'condition': 'uncrowded'},
      {'target': 'L', 'condition': 'uncrowded'},
      {'target': 'E', 'condition': 'uncrowded'},
      {'target': 'P', 'condition': 'uncrowded'},
      {'target': 'T', 'condition': 'crowded'},
      {'target': 'F', 'condition': 'crowded'},
      {'target': 'H', 'condition': 'crowded'},
      {'target': 'L', 'condition': 'crowded'},
      {'target': 'E', 'condition': 'crowded'},
      {'target': 'P', 'condition': 'crowded'},
      {'target': 'T', 'condition': 'uncrowded'},
      {'target': 'F', 'condition': 'uncrowded'},
      {'target': 'H', 'condition': 'uncrowded'},
      {'target': 'L', 'condition': 'uncrowded'},
      {'target': 'E', 'condition': 'uncrowded'},
      {'target': 'P', 'condition': 'uncrowded'}]
    Routine fixation
    Routine Stimulus
    Routine response
  LoopTerminator trials
