PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Wordpriming exp.
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Routine
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $fragment
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/DELL/Downloads/StudyPhase_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'doctor'},
      {'Study_word': 'bread'},
      {'Study_word': 'cat'},
      {'Study_word': 'sun'},
      {'Study_word': 'table'},
      {'Study_word': 'king'},
      {'Study_word': 'hot'},
      {'Study_word': 'pen'},
      {'Study_word': 'car'},
      {'Study_word': 'teacher'},
      {'Study_word': 'day'},
      {'Study_word': 'rain'},
      {'Study_word': 'bird'},
      {'Study_word': 'music'},
      {'Study_word': 'fire'},
      {'Study_word': 'book'},
      {'Study_word': 'flower'},
      {'Study_word': 'salt'},
      {'Study_word': 'knife'},
      {'Study_word': 'shoe'},
      {'Study_word': 'phone'},
      {'Study_word': 'eye'},
      {'Study_word': 'water'},
      {'Study_word': 'apple'},
      {'Study_word': 'baby'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TestPhase_words_with_fragments.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'nurse', 'reference': 'doctor', 'old_new': 'old', 'fragment': 'n__se'},
      {'test_word': 'butter', 'reference': 'bread', 'old_new': 'old', 'fragment': 'but__r'},
      {'test_word': 'dog', 'reference': 'cat', 'old_new': 'old', 'fragment': 'dog'},
      {'test_word': 'moon', 'reference': 'sun', 'old_new': 'old', 'fragment': 'm__n'},
      {'test_word': 'chair', 'reference': 'table', 'old_new': 'old', 'fragment': 'c_a_r'},
      {'test_word': 'queen', 'reference': 'king', 'old_new': 'old', 'fragment': 'qu__n'},
      {'test_word': 'cold', 'reference': 'hot', 'old_new': 'old', 'fragment': 'c__d'},
      {'test_word': 'paper', 'reference': 'pen', 'old_new': 'old', 'fragment': 'pa__r'},
      {'test_word': 'road', 'reference': 'car', 'old_new': 'old', 'fragment': 'r__d'},
      {'test_word': 'student', 'reference': 'teacher', 'old_new': 'old', 'fragment': 'st_d_nt'},
      {'test_word': 'night', 'reference': 'day', 'old_new': 'old', 'fragment': 'n_g_t'},
      {'test_word': 'umbrella', 'reference': 'rain', 'old_new': 'old', 'fragment': 'umbr__la'},
      {'test_word': 'nest', 'reference': 'bird', 'old_new': 'old', 'fragment': 'n__t'},
      {'test_word': 'song', 'reference': 'music', 'old_new': 'old', 'fragment': 's__g'},
      {'test_word': 'smoke', 'reference': 'fire', 'old_new': 'old', 'fragment': 's__ke'},
      {'test_word': 'page', 'reference': 'book', 'old_new': 'old', 'fragment': 'p__e'},
      {'test_word': 'garden', 'reference': 'flower', 'old_new': 'old', 'fragment': 'g_r_en'},
      {'test_word': 'pepper', 'reference': 'salt', 'old_new': 'old', 'fragment': 'p__per'}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
    Routine Test_Routine
  LoopTerminator trials_2
